PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = teste2
  keyboardBackend = ioHub
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Routines
  Routine Session_2
    TextComponent text_countdown_2
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 10
      text [set every frame] = $str(20-int(t))
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Session 2
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 10
      text = Session 2
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  Routine Session_3
    TextComponent text_countdown_3
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 10
      text [set every frame] = $str(20-int(t))
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Session 1
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 10
      text = Session 1
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  Routine Session_1
    TextComponent text_countdown
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 10
      text [set every frame] = $str(20-int(t))
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Session 1
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 10
      text = Session 1
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  Routine Session_4
    TextComponent text_countdown_4
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 10
      text [set every frame] = $str(20-int(t))
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Session 1
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 10
      text = Session 1
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Flow
  Routine Session_1
  Routine Session_2
  Routine Session_3
  Routine Session_4
